PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Worker ID'], expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'Worker ID': '', 'Session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images/beginpart2.png', 'images/beginpart3.png', 'images/foods_and_brands/apple slices.png', 'images/foods_and_brands/bacon chicken sub.png', 'images/foods_and_brands/baconburger.png', 'images/foods_and_brands/banana.png', 'images/foods_and_brands/beef burrito1.png', 'images/foods_and_brands/beef tacos.png', 'images/foods_and_brands/breakfast sandwich.png', 'images/foods_and_brands/burgerking.png', 'images/foods_and_brands/caesarsalad.png', 'images/foods_and_brands/chattycathys.png', 'images/foods_and_brands/cheeseburger1.png', 'images/foods_and_brands/cheesecakefactory.png', 'images/foods_and_brands/cheesequesadilla.png', 'images/foods_and_brands/chicken bowl.png', 'images/foods_and_brands/chicken nuggets.png', 'images/foods_and_brands/chicken sandwich.png', 'images/foods_and_brands/chicken wrap 2.png', 'images/foods_and_brands/chicken wrap.png', 'images/foods_and_brands/chickenburrito.png', 'images/foods_and_brands/chickentaco.png', 'images/foods_and_brands/chipotle.png', 'images/foods_and_brands/chocolateglazeddonut.png', 'images/foods_and_brands/cinnamonroll.png', 'images/foods_and_brands/coffeecake.png', 'images/foods_and_brands/cornerbakery.png', 'images/foods_and_brands/cosi.png', 'images/foods_and_brands/croissant.png', 'images/foods_and_brands/ctb.png', 'images/foods_and_brands/doubleburger.png', 'images/foods_and_brands/dunkin.png', 'images/foods_and_brands/elpolloloco.png', 'images/foods_and_brands/FIshSandwich.png', 'images/foods_and_brands/fiveguys.png', 'images/foods_and_brands/frappuccino.png', 'images/foods_and_brands/frenchfries.png', 'images/foods_and_brands/glazeddonut.png', 'images/foods_and_brands/grilledchickensandwich.png', 'images/foods_and_brands/icedcoffee.png', 'images/foods_and_brands/italiansub.png', 'images/foods_and_brands/krispykreme.png', 'images/foods_and_brands/mcdonalds.png', 'images/foods_and_brands/meatballsub.png', 'images/foods_and_brands/moes.png', 'images/foods_and_brands/oatmeal.png', 'images/foods_and_brands/panerabread.png', 'images/foods_and_brands/parfait.png', 'images/foods_and_brands/peetscoffee.png', 'images/foods_and_brands/phillycheesesteak.png', 'images/foods_and_brands/qdoba.png', 'images/foods_and_brands/quiznos.png', 'images/foods_and_brands/salad 1.png', 'images/foods_and_brands/salad 2.png', 'images/foods_and_brands/salad.png', 'images/foods_and_brands/scone.png', 'images/foods_and_brands/shakeshack.png', 'images/foods_and_brands/starbucks.png', 'images/foods_and_brands/steak bowl.png', 'images/foods_and_brands/steak tacos.png', 'images/foods_and_brands/steakburrito.png', 'images/foods_and_brands/subway.png', 'images/foods_and_brands/tacobell.png', 'images/foods_and_brands/tacosalad2.png', 'images/foods_and_brands/tea.png', 'images/foods_and_brands/thecoffeebean.png', 'images/foods_and_brands/tomatosoup.png', 'images/foods_and_brands/tunasub.png', 'images/foods_and_brands/turkey bacon sub.png', 'images/foods_and_brands/turkeysub.png', 'images/foods_and_brands/veggie burrito.png', 'images/foods_and_brands/veggiewrap.png', 'images/foods_and_brands/wegmans.png', 'images/foods_and_brands/wendys.png', 'images/foods_and_brands/wholefoods.png']
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = food
  logging level = debug
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Routines
  Routine instr_1a
    TextComponent txt_1a
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome! Thank you for taking the experiment today.

        Important note: DO NOT EXIT FULLSCREEN MODE THROUGHOUT THE EXPERIMENT. If for some reason the experiment stalls or does not continue as it should, please stop the experiment and email me at gwf25@cornell.edu.

        The experiment contains three sections and will begin now.
    MouseComponent resp_1a
      clickable = img_1a,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 7
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    ImageComponent img_1a
      image = images/continue.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 7.0
      units = height
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  Routine choose
    MouseComponent resp_choose
      clickable = left_choice, right_choice,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_img_pos_choose
      Code Type = Both
      Before JS Experiment:
        function shuffle(array) {
          for (let i = array.length - 1; i > 0; i--) {
            let j = Math.floor(Math.random() * (i + 1));
            [array[i], array[j]] = [array[j], array[i]];
          }
        }
      Begin Experiment:
        random_bools = [True, True, True, True, True, False, False, False, False, False]
        shuffle(random_bools)
        pos_left_top_img = (-0.45, .15)
        pos_left_bot_img = (-0.45, -.15)
        pos_right_top_img = (.45, .15)
        pos_right_bot_img = (.45, -.15)
        pos_img_food1 = pos_left_top_img
        pos_img_brand1 = pos_left_bot_img
        pos_img_food2 = pos_right_top_img
        pos_img_brand2 = pos_right_bot_img
      Begin JS Experiment:
        random_bools = [true, true, true, true, true, false, false, false, false, false];
        shuffle(random_bools)
        pos_left_top_img = [(- 0.45), 0.15];
        pos_left_bot_img = [(- 0.45), (- 0.15)];
        pos_right_top_img = [0.45, 0.15];
        pos_right_bot_img = [0.45, (- 0.15)];
        pos_img_food1 = pos_left_top_img;
        pos_img_brand1 = pos_left_bot_img;
        pos_img_food2 = pos_right_top_img;
        pos_img_brand2 = pos_right_bot_img;
      Begin JS Routine:
        win_width = psychoJS.window.size[0]
        win_height = psychoJS.window.size[1]
        upper_left = [(- win_width / win_height / 2 + 0.1), 0.5 - 0.05]
        upper_right = [win_width / win_height / 2 - 0.1, 0.5 - 0.05]
        food_top = random_bools.pop()
        if (food_top) {
            pos_img_food1 = pos_left_top_img;
            pos_img_brand1 = pos_left_bot_img;
            pos_img_food2 = pos_right_top_img;
            pos_img_brand2 = pos_right_bot_img;
        } else {
            pos_img_food1 = pos_left_bot_img;
            pos_img_brand1 = pos_left_top_img;
            pos_img_food2 = pos_right_bot_img;
            pos_img_brand2 = pos_right_top_img;
        }
      Begin Routine:
        win_width = win.size[0]
        win_height = win.size[1]
        upper_left = (-win_width / win_height / 2 + 0.1, 0.5 - 0.05) # with image of size (0.2, 0.1)
        upper_right = (win_width / win_height / 2 - 0.1, 0.5 - 0.05) # with image of size (0.2, 0.1)

        food_top = random_bools[-1]
        random_bools = random_bools[:-1]
        if food_top:
            pos_img_food1 = pos_left_top_img
            pos_img_brand1 = pos_left_bot_img
            pos_img_food2 = pos_right_top_img
            pos_img_brand2 = pos_right_bot_img
        else:
            pos_img_food1 = pos_left_bot_img
            pos_img_brand1 = pos_left_top_img
            pos_img_food2 = pos_right_bot_img
            pos_img_brand2 = pos_right_top_img
      End JS Routine:
        psychoJS.experiment.addData('food_top', food_top)
        psychoJS.experiment.addData('screen_width', win_width)
        psychoJS.experiment.addData('screen_height', win_height)
      End Routine:
        thisExp.addData('food_top', food_top)
    ImageComponent left_choice
      image = images/left.png
      pos [set every repeat] = upper_left
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent right_choice
      image = images/right.png
      pos [set every repeat] = upper_right
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_mouse_info
      Code Type = Both
      Begin JS Routine:
        x_coord = [];
        y_coord = [];
        time = [];
      Begin Routine:
        x_coord = []
        y_coord = []
        time = []
      Each Frame:
        x_coord.append(resp_choose.getPos()[0])
        y_coord.append(resp_choose.getPos()[1])
        time.append(resp_choose.mouseClock.getTime())
      Each JS Frame:
        mouse_position = resp_choose.getPos();
        x_coord.push(mouse_position[0]);
        y_coord.push(mouse_position[1]);
        time.push(resp_choose.mouseClock.getTime())
      End JS Routine:
        psychoJS.experiment.addData('x_coord', x_coord);
        psychoJS.experiment.addData('y_coord', y_coord);
        psychoJS.experiment.addData('time', time);
      End Routine:
        thisExp.addData('x_coord', x_coord)
        thisExp.addData('y_coord', y_coord)
        thisExp.addData('time', time)
    ImageComponent img_food1
      image [set every repeat] = $"images/foods_and_brands/" + food1
      pos [set every repeat] = pos_img_food1
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent img_food2
      image [set every repeat] = $"images/foods_and_brands/" + food2
      pos [set every repeat] = pos_img_food2
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent img_brand1
      image [set every repeat] = $"images/foods_and_brands/" + brand1
      pos [set every repeat] = pos_img_brand1
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent img_brand2
      image [set every repeat] = $"images/foods_and_brands/" + brand2
      pos [set every repeat] = pos_img_brand2
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = height
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  Routine rating
    ImageComponent rated_item
      image [set every repeat] = $"images/foods_and_brands/" + item
      pos = (0, .2)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      units = height
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    ImageComponent neg3
      image = images/ratings/-3.png
      pos = (-.525, -.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      units = height
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    ImageComponent neg2
      image = images/ratings/-2.png
      pos = (-.35, -.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      units = height
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    ImageComponent neg1
      image = images/ratings/-1.png
      pos = (-.175, -.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      units = height
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    ImageComponent pos0
      image = images/ratings/0.png
      pos = (0, -.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      units = height
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    ImageComponent pos1
      image = images/ratings/1.png
      pos = (.175, -.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      units = height
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    ImageComponent pos2
      image = images/ratings/2.png
      pos = (.35, -.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      units = height
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    ImageComponent pos3
      image = images/ratings/3.png
      pos = (.525, -.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      units = height
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    MouseComponent resp_rating
      clickable = neg3,neg2,neg1,pos0,pos1,pos2,pos3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0
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    CodeComponent code_rating
      Code Type = Both
  Routine instr_2a
    CodeComponent instr_text_code
      Code Type = Auto->JS
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      Begin Experiment:
        completed_2 = False
        instr_2a = ""
        instr_2b = ""
        instr_2c = ""
        instr_2d = ""
      Begin Routine:
        instr_p2 = "Part 2\n\n"
        instr_p3 = "Part 3\n\n"
        instr_food_a = "In this part of the experiment we will show you pictures of foods and we will ask you to provide a rating (on a scale from -3 to +3) of how much you would like to eat that food right now.\n\nNOTE: These liking ratings are a crucial part of the experiment, so please be as accurate as possible."
        instr_brand_a = "In this part of the experiment we will show you pictures of food brands and we will ask you to provide a rating (on a scale from -3 to +3) of how much you like each particular brand.\n\nNOTE: These liking ratings are a crucial part of the experiment, so please be as accurate as possible."
        instr_food_b = "The rating scale is as follows:\n\n- A rating of ‘0’ means that you are indifferent between eating that food and not eating it, or that you neither like nor dislike it.\n- A positive rating means that you like the food, with a rating of ‘+3’ indicating that you like the food as much as possible.\n- A negative rating means that you do NOT like the food, with a rating of ‘-3’ indicating that you dislike the food as much as possible."
        instr_brand_b = "The rating scale is as follows:\n\n- A rating of ‘0’ means that you neither like nor dislike the brand.\n- A positive rating means that you like the brand, with a rating of ‘+3’ indicating that you like the brand as much as possible.\n- A negative rating means that you do NOT like the brand, with a rating of ‘-3’ indicating that you dislike the brand as much as possible."
        instr_food_c = "The rating task works as follows:\n\n1. You will see the picture of a food.\n2. The rating scale will appear below the picture. At this time, you should enter your rating."
        instr_brand_c = "The rating task works as follows:\n\n1. You will see the picture of a brand.\n2. The rating scale will appear below the picture. At this time, you should enter your rating."
        instr_food_d = "To enter your rating, use the MOUSE to click the desired value. Please focus on the food image as you select your rating with the mouse."
        instr_brand_d = "To enter your rating, use the MOUSE to click the desired value. Please focus on the brand image as you select your rating with the mouse."
        if label == "food":
            if completed_2:
                instr_2a = instr_p3 + instr_food_a
            else:
                instr_2a = instr_p2 + instr_food_a
            instr_2b = instr_food_b
            instr_2c = instr_food_c
            instr_2d = instr_food_d
        else:
            if completed_2:
                instr_2a = instr_p3 + instr_brand_a
            else:
                instr_2a = instr_p2 + instr_brand_a
            instr_2b = instr_brand_b
            instr_2c = instr_brand_c
            instr_2d = instr_brand_d
    TextComponent txt_2a
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_2a
      units = height
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    MouseComponent resp_2a
      clickable = img_2a,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 7
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    ImageComponent img_2a
      image = images/continue.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 7
      units = height
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  Routine instr_2b
    TextComponent txt_2b
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_2b
      units = height
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    MouseComponent resp_2b
      clickable = img_2b,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 7
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    ImageComponent img_2b
      image = images/continue.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 7
      units = height
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  Routine instr_2c
    TextComponent txt_2c
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_2c
      units = height
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    MouseComponent resp_2c
      clickable = img_2c,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 7
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    ImageComponent img_2c
      image = images/continue.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 7
      units = height
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  Routine instr_2d
    CodeComponent img_code
      Code Type = Auto->JS
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      Begin Routine:
        img_2d_src = "images/beginpart" + ("3" if completed_2 else "2") + ".png"
      End Routine:
        completed_2 = True
    TextComponent txt_2d
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_2d
      units = height
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    MouseComponent resp_2d
      clickable = img_2d,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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    ImageComponent img_2d
      image [set every repeat] = $img_2d_src
      pos = (0, -.35)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 2.0
      units = height
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  Routine practice
    MouseComponent resp_choose_p
      clickable = left_choice_p, right_choice_p,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_img_pos_choose_p
      Code Type = Both
      Begin Experiment:
        random_bools_p = [True, True, True, True, True, False, False, False, False, False]
        shuffle(random_bools_p)
        pos_left_top_img = (-0.45, .15)
        pos_left_bot_img = (-0.45, -.15)
        pos_right_top_img = (.45, .15)
        pos_right_bot_img = (.45, -.15)
        pos_img_food1 = pos_left_top_img
        pos_img_brand1 = pos_left_bot_img
        pos_img_food2 = pos_right_top_img
        pos_img_brand2 = pos_right_bot_img
      Begin JS Experiment:
        random_bools_p = [true, true, true, true, true, false, false, false, false, false];
        shuffle(random_bools_p)
        pos_left_top_img = [(- 0.45), 0.15];
        pos_left_bot_img = [(- 0.45), (- 0.15)];
        pos_right_top_img = [0.45, 0.15];
        pos_right_bot_img = [0.45, (- 0.15)];
        pos_img_food1 = pos_left_top_img;
        pos_img_brand1 = pos_left_bot_img;
        pos_img_food2 = pos_right_top_img;
        pos_img_brand2 = pos_right_bot_img;
      Begin JS Routine:
        win_width = psychoJS.window.size[0]
        win_height = psychoJS.window.size[1]
        upper_left = [(- win_width / win_height / 2 + 0.1), 0.5 - 0.05]
        upper_right = [win_width / win_height / 2 - 0.1, 0.5 - 0.05]
        food_top = random_bools_p.pop()
        if (food_top) {
            pos_img_food1 = pos_left_top_img;
            pos_img_brand1 = pos_left_bot_img;
            pos_img_food2 = pos_right_top_img;
            pos_img_brand2 = pos_right_bot_img;
        } else {
            pos_img_food1 = pos_left_bot_img;
            pos_img_brand1 = pos_left_top_img;
            pos_img_food2 = pos_right_bot_img;
            pos_img_brand2 = pos_right_top_img;
        }
      Begin Routine:
        win_width = win.size[0]
        win_height = win.size[1]
        upper_left = (-win_width / win_height / 2 + 0.1, 0.5 - 0.05) # with image of size (0.2, 0.1)
        upper_right = (win_width / win_height / 2 - 0.1, 0.5 - 0.05) # with image of size (0.2, 0.1)

        food_top = random_bools_p[-1]
        random_bools = random_bools_p[:-1]
        if food_top:
            pos_img_food1 = pos_left_top_img
            pos_img_brand1 = pos_left_bot_img
            pos_img_food2 = pos_right_top_img
            pos_img_brand2 = pos_right_bot_img
        else:
            pos_img_food1 = pos_left_bot_img
            pos_img_brand1 = pos_left_top_img
            pos_img_food2 = pos_right_bot_img
            pos_img_brand2 = pos_right_top_img
    ImageComponent left_choice_p
      image = images/left.png
      pos [set every repeat] = upper_left
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent right_choice_p
      image = images/right.png
      pos [set every repeat] = upper_right
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent img_food1_p
      image [set every repeat] = $"images/foods_and_brands/" + food1
      pos [set every repeat] = pos_img_food1
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent img_food2_p
      image [set every repeat] = $"images/foods_and_brands/" + food2
      pos [set every repeat] = pos_img_food2
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent img_brand1_p
      image [set every repeat] = $"images/foods_and_brands/" + brand1
      pos [set every repeat] = pos_img_brand1
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent img_brand2_p
      image [set every repeat] = $"images/foods_and_brands/" + brand2
      pos [set every repeat] = pos_img_brand2
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = height
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  Routine begin_trial
    ImageComponent img_choose_begin
      image = images/start.png
      pos = (0, -.425)
      saveStartStop = False
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent resp_choose_begin
      clickable = img_choose_begin,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instr_1f
    TextComponent txt_1f
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        The practice trials are now complete.
        You will now begin Part 1.
    MouseComponent resp_1f
      clickable = img_1f,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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    ImageComponent img_1f
      image = images/beginpart1.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 2.0
      units = height
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  Routine instr_1b
    TextComponent txt_1b
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Part 1

        In this part of the experiment, you will make 10 decisions.
        For each decision, you will see two food items and two brands displayed on the screen in front of you.
        Your task is to select the food-brand pairing that you prefer to eat.
        Choose freely based on your desires in the moment, there is no correct or incorrect answer.
        You will indicate your response by selecting the box labeled “left” or “right” corresponding to the side of the food you prefer by using the mouse cursor.
    MouseComponent resp_1b
      clickable = img_1b,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 7
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    ImageComponent img_1b
      image = images/continue.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 7
      units = height
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  Routine choose_move
    CodeComponent code_cm
      Code Type = Auto->JS
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      Begin Routine:
        init_mouse_cm = mouse_cm.getPos()
      Each Frame:
        movement = init_mouse_cm[0] - mouse_cm.getPos()[0] != 0 or init_mouse_cm[1] - mouse_cm.getPos()[1] != 0
        if movement:
            continueRoutine = False
    MouseComponent mouse_cm
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_move
    CodeComponent code_pm
      Code Type = Auto->JS
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      Begin Routine:
        init_mouse_pm = mouse_pm.getPos()
      Each Frame:
        movement = init_mouse_pm[0] - mouse_pm.getPos()[0] != 0 or init_mouse_pm[1] - mouse_pm.getPos()[1] != 0
        if movement:
            continueRoutine = False
    MouseComponent mouse_pm
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instr_1c
    TextComponent txt_1c
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Each trial in this task will work as follows:

        1. You will see a start button.
        2. Click on the screen’s start button with the mouse cursor and then begin to move the mouse. NOTE: You will only be able to see the food and brand images once you move the cursor after beginning the trial.
        3. You will see two food items and their associated brands on the left and right side of the screen.
        4. You will indicate your decision by moving the mouse to the top corner of the screen corresponding to the side of the food you prefer and selecting the box.
    MouseComponent resp_1c
      clickable = img_1c,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 7
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    ImageComponent img_1c
      image = images/continue.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 7
      units = height
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  Routine instr_1d
    TextComponent txt_1d
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        In this experiment, it is crucial that you respond as quickly and accurately as you can.
        Please try to respond naturally, moving from the start button continuously toward the top side of the screen of the desired choice option.
        Please move your mouse immediately on clicking the start button even if you are not fully sure of your response yet.
        Do not “play” with the mouse (e.g., by moving it in spirals, etc.).
    MouseComponent resp_1d
      clickable = img_1d,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 7
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    ImageComponent img_1d
      image = images/continue.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 7
      units = height
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  Routine instr_1e
    TextComponent txt_1e
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = To better understand how this task works, you will first complete 3 practice trials before starting Part 1.
      units = height
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    MouseComponent resp_1e
      clickable = img_1e,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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    ImageComponent img_1e
      image = images/beginpractice.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 2.0
      units = height
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  Routine blank
    TextComponent blank_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine show_code
    CodeComponent code
      Code Type = JS
      Before JS Experiment:
        function getRandomCode() {
          let code = "";
          for(var i = 0; i < 8; i++){
           code += Math.floor(Math.random() * 10);
          }
          return code;
        }
      Begin JS Experiment:
        random_code = ""
      Begin JS Routine:
        random_code = getRandomCode()
        psychoJS.experiment.addData('code', random_code);
      End JS Routine:
        //psychoJS.experiment.addData('code', random_code);
    TextComponent txt_show_code
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Please write down your Decision Task Completion Code: " + random_code
      units = height
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    MouseComponent resp_show_code
      clickable = img_show_code,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
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    ImageComponent img_show_code
      image = images/continue.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 2.0
      units = height
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  Routine end
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent txt_end
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = You have now completed the experiment. Click anywhere to exit.
      units = height
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  Routine time_warning
    CodeComponent code_warning
      Code Type = Auto->JS
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      Begin Routine:
        do_warning = resp_choose.time[-1] > 3
        txt_warning_stop = 3 if do_warning else 0
    TextComponent txt_warning
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = txt_warning_stop
      text = Please move the cursor to your choice faster.
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  Routine time_warning_p
    CodeComponent code_warning_p
      Code Type = Auto->JS
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      Begin Routine:
        do_warning_p = resp_choose_p.time[-1] > 3
        txt_warning_p_stop = 3 if do_warning_p else 0
    TextComponent txt_warning_p
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = txt_warning_p_stop
      text = Please move the cursor to your choice faster.
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Flow
  Routine instr_1a
  Routine instr_1b
  Routine instr_1c
  Routine instr_1d
  Routine instr_1e
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = conditions_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'food1': 'frenchfries.png', 'brand1': 'burgerking.png', 'food2': 'caesarsalad.png', 'brand2': 'panerabread.png'},
      {'food1': 'cheesequesadilla.png', 'brand1': 'qdoba.png', 'food2': 'croissant.png', 'brand2': 'peetscoffee.png'},
      {'food1': 'baconburger.png', 'brand1': 'mcdonalds.png', 'food2': 'chicken bowl.png', 'brand2': 'chipotle.png'}]
    Routine begin_trial
    Routine practice_move
    Routine practice
    Routine time_warning_p
  LoopTerminator practice_trials
  Routine instr_1f
  LoopInitiator choose_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'food1': 'frenchfries.png', 'brand1': 'burgerking.png', 'food2': 'caesarsalad.png', 'brand2': 'panerabread.png'},
      {'food1': 'cheesequesadilla.png', 'brand1': 'qdoba.png', 'food2': 'croissant.png', 'brand2': 'peetscoffee.png'},
      {'food1': 'baconburger.png', 'brand1': 'mcdonalds.png', 'food2': 'chicken bowl.png', 'brand2': 'chipotle.png'},
      {'food1': 'glazeddonut.png', 'brand1': 'krispykreme.png', 'food2': 'italiansub.png', 'brand2': 'subway.png'},
      {'food1': 'cheeseburger1.png', 'brand1': 'shakeshack.png', 'food2': 'apple slices.png', 'brand2': 'wendys.png'},
      {'food1': 'meatballsub.png', 'brand1': 'wholefoods.png', 'food2': 'scone.png', 'brand2': 'thecoffeebean.png'},
      {'food1': 'grilledchickensandwich.png', 'brand1': 'cheesecakefactory.png', 'food2': 'doubleburger.png', 'brand2': 'fiveguys.png'},
      {'food1': 'oatmeal.png', 'brand1': 'cornerbakery.png', 'food2': 'chicken wrap 2.png', 'brand2': 'quiznos.png'},
      {'food1': 'coffeecake.png', 'brand1': 'dunkin.png', 'food2': 'beef tacos.png', 'brand2': 'tacobell.png'},
      {'food1': 'steakburrito.png', 'brand1': 'moes.png', 'food2': 'turkey bacon sub.png', 'brand2': 'cosi.png'}]
    Routine begin_trial
    Routine choose_move
    Routine choose
    Routine time_warning
  LoopTerminator choose_trials
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'conditions': 'conditions_food.xlsx', 'label': 'food'},
      {'conditions': 'conditions_brand.xlsx', 'label': 'brand'}]
    Routine instr_2a
    Routine instr_2b
    Routine instr_2c
    Routine instr_2d
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditions
      loopType = random
      nReps = 1
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      Routine rating
      Routine blank
    LoopTerminator trials
  LoopTerminator blocks
  Routine show_code
  Routine end
